---
API: 3
OpenSesame: 4.0.5
Platform: nt
---
set width 700
set title "Corsi task v.1.0.1"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend osweb
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "6788220d-9996-6f19-8aea-d7632dfdd24d"
set height 700
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic False
set font_family mono
set font_bold False
set experiment_path "C:\\Users\\Dust\\Box\\ECAN Lab\\Measures\\Experiments\\Corsi task (CT)\\UPIC"
set disable_garbage_collection False
set description "The main experiment item"
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set background "#000000"

define advanced_delay click_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 400
	set description "A random delay sampled from either a normal or uniform distribution"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run urlQueryParameters True
	run gameLogic True
	run instructions True
	run touch_loop True
	run trials_loop True
	run feedback True

define feedback feedback
	set reset_variables yes
	set duration 5000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=True text="Du klarade {correctSequenceLength} i följd.<br />Bra jobbat!" x=0 y=0 z_index=0

define inline_javascript flashSequence
	set description "Executes Python code"
	set _run "flashSequence(0);"
	set _prepare ""

define advanced_delay flashSequence_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 1000
	set description "A random delay sampled from either a normal or uniform distribution"

define inline_javascript gameInit
	set description "Executes Python code"
	___run__
	// Set the time of delay objects
	this.exp.items._items.sequence_loop.vars.repeat = sequenceLength;
	this.exp.items._items.timeBeforeFlash_delay._duration = timeBeforeFlash;
	this.exp.items._items.flashSequence_delay._duration = timeOut;
	__end__
	___prepare__
	var c = Canvas();
	vars.xyGridPos = [];
	vars.rectPos = [];
	vars.sequenceXY = [];
	vars.sequenceTouch = []; 
	vars.endTrial = false;
	vars.correctClicks = 0;
	vars.trialAttempts = 0;
	vars.breakLoop = false;
	var cycle = this.exp.items._items.trials_loop._cycles[0];
	vars.touchGrid = []
	
	var timeOut = ((timeBetweenFlash + flashTime) * sequenceLength);
	
	if (cycle % 2 != 0) {
	 failedAttempts = 0;
	}
	
	for (let [x, y] of xy_grid(5, 140)) {
	    xyGridPos.push([x,y]);
	}
	
	// Create 9 rectangel objects at random places on the screen.
	for (let i = 0; i < 9; i++) {
	    let index = [(Math.floor(Math.random() * xyGridPos.length))]
	    let [x,y] = xyGridPos[index];
	    rectPos.push(xyGridPos[index]);
	    xyGridPos.splice(index,1);
	    c.rect({x:x-60, y:y-60, w:120, h:120, color: 'white', fill:true})
	}
	
	// Translate the rectangels positions from xy to touch grid.
	for (let [x,y] of rectPos) {
	    touchGrid.push(Number(getKeyByValue(sequenceDictionary, [x,y])));
	}
	
	// Show the canvas
	c.show();
	__end__

define inline_javascript gameLogic
	set description "Executes Python code"
	set _run ""
	___prepare__
	vars.correctSequenceLength = 0;
	vars.failedAttempts = 0;
	vars.flashTime = 1000;
	vars.timeBetweenFlash = 500;
	vars.timeBeforeFlash = 1500;
	vars.clickRectFlash = 200;
	vars.clickDelay = 300;
	vars.nextClickDelay = 500;
	var correctAnswer;
	var c = Canvas();
	vars.xyGridPos = [];
	vars.rectPos = [];
	vars.sequenceXY = [];
	vars.sequenceTouch = [];
	var rect;
	
	var sequenceDictionary = {  
	    1:  [-280, -280],
	    2:  [-140, -280],
	    3:  [   0, -280],
	    4:  [ 140, -280],
	    5:  [ 280, -280],
	    6:  [-280, -140],
	    7:  [-140, -140],
	    8:  [   0, -140],
	    9:  [ 140, -140],
	    10: [ 280, -140],
	    11: [-280,    0],
	    12: [-140,    0],
	    13: [   0,    0],
	    14: [ 140,    0],
	    15: [ 280,    0],
	    16: [-280,  140],
	    17: [-140,  140],
	    18: [   0,  140],
	    19: [ 140,  140],
	    20: [ 280,  140],
	    21: [-280,  280],
	    22: [-140,  280],
	    23: [   0,  280],
	    24: [ 140,  280],
	    25: [ 280,  280],
	}
	
	// Get key from dictonary 
	function getKeyByValue(object, value) {
	    return Object.keys(object).find(key =>
	        object[key].every((element, index) => element === value[index])
	    );
	}
	
	// Create a rectangel
	function createRect(rect, rectColor) {
	    let [x, y] = rect;
	    c.rect({x:x-60, y:y-60, w:120, h:120, color: rectColor, fill:true});
	    c.show();
	}
	
	// Change a rectangels color for a short time and then change it back to white
	function flashClickedRect(rect, rectColor) {
	    createRect(rect,rectColor)
	    setTimeout(function() {
	        createRect(rect,'white')
	    }, clickRectFlash)
	}
	
	// Get a random rectangel from all of the created rectangels 
	function getRandomRect() {
	    let index = Math.floor(Math.random() * rectPos.length);
	    let [x,y] = rectPos[index];
	    sequenceXY.push([x,y]);
	    sequenceTouch.push(Number(getKeyByValue(sequenceDictionary, [x,y])));
	    return [x,y];
	}
	
	// Flash a sequence of rectangels 
	function flashSequence(j) {
	    if (j < sequenceLength) {
	        if (j === 0) {
	            // For the first rectangle, show it immediately without delay
	            let rect = getRandomRect();
	            createRect(rect, 'green');
	
	            setTimeout(function() {
	                createRect(rect, 'white');
	                flashSequence(j + 1);
	            }, flashTime);
	        } else {
	            // For subsequent rectangles, apply the delay
	            setTimeout(function() {
	                let rect = getRandomRect();
	                createRect(rect, 'green');
	
	                setTimeout(function() {
	                    createRect(rect, 'white');
	                    flashSequence(j + 1);
	                }, flashTime);
	            }, timeBetweenFlash);
	        }
	    }
	}
	__end__

define sketchpad instructions
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=True text="I den här delen kommer du få se 9<br />fyrkanter. I varje omgång kommer<br />fyrkanterna att blinka i en viss<br />ordning. Du ska minnas ordningen<br />och återge den genom att klicka på<br />fyrkanterna i rätt ordning. Gör ditt<br />bästa och håll uppmärksamheten<br />på skärmen hela tiden." x=0 y=-64 z_index=0
	draw image center=1 file="continue.jpg" scale=1 show_if=True x=0 y=256 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define touch_response new_1_touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 1
	set _ncol 1

define inline_javascript new_inline_javascript
	set description "Executes Python code"
	___run__
	if (touchGrid.includes(response)) {
	    repeat_cycle  = 0
	}
	else {
	    repeat_cycle  = 1
	}
	__end__
	set _prepare ""

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run gameInit True
	run timeBeforeFlash_delay True
	run flashSequence True
	run flashSequence_delay True
	run sequence_loop True

define advanced_delay nextClick_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 400
	set description "A random delay sampled from either a normal or uniform distribution"

define repeat_cycle repeat_cycle_2
	set description "Optionally repeat a cycle from a loop"
	set condition never

define inline_javascript response_script
	set description "Executes Python code"
	___run__
	if (response == sequenceTouch[correctClicks]) {
	    correctAnswer = true;
	}
	else {
	    correctAnswer = false;
	}
	__end__
	set _prepare ""

define inline_javascript right_script
	set description "Executes Python code"
	___run__
	correctClicks++;
	
	if (correctClicks == sequenceLength) {
	    breakLoop = true;
	    correctSequenceLength = sequenceLength;
	    trialAttempts++;
	}
	
	flashClickedRect(sequenceDictionary[response], 'green');
	__end__
	set _prepare ""

define feedback sequenceFeedback
	set reset_variables yes
	set duration 10
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=True text="Klicka var som helst<br />för att starta nästa omgång." x=0 y=-32 z_index=0

define touch_response sequenceResponse
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set correct_response 1
	set _nrow 5
	set _ncol 5

define loop sequence_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "breakLoop == true"
	setcycle 0 empty_column ""
	run trial_sequence

define touch_response squareClicked
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set correct_response 1
	set _nrow 5
	set _ncol 5

define advanced_delay timeBeforeFlash_delay
	set jitter_mode Uniform
	set jitter 0
	set duration 1500
	set description "A random delay sampled from either a normal or uniform distribution"

define loop touch_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run touch_sequence

define loop touch_loop_2
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run touch_sequence_2

define repeat_cycle touch_repeat_cycle
	set description "Optionally repeat a cycle from a loop"
	set condition "response != 48"

define touch_response touch_response
	set timeout infinite
	set show_cursor yes
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set _nrow 11
	set _ncol 5

define sequence touch_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run touch_response True
	run touch_repeat_cycle True

define sequence touch_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run squareClicked True
	run new_inline_javascript True

define inline_javascript trialInit
	set description "Executes Python code"
	___run__
	this.exp.items._items.sequenceResponse.vars.correct_response = sequenceTouch[correctClicks];
	this.exp.items._items.click_delay._duration = clickDelay;
	this.exp.items._items.nextClick_delay._duration = nextClickDelay;
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trialInit True
	run touch_loop_2 True
	run response_script True
	run right_script "correctAnswer == true"
	run wrong_script "correctAnswer == false"
	run click_delay True
	run sequenceFeedback "breakLoop == true and failedAttempts != 2"
	run nextClick_delay "breakLoop == true and failedAttempts != 2"
	run new_1_touch_response "breakLoop == true and failedAttempts != 2"
	run logger True

define loop trials_loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 18
	set continuous no
	set break_if_on_first yes
	set break_if "failedAttempts == 2"
	setcycle 0 sequenceLength 2
	setcycle 1 sequenceLength 2
	setcycle 2 sequenceLength 3
	setcycle 3 sequenceLength 3
	setcycle 4 sequenceLength 4
	setcycle 5 sequenceLength 4
	setcycle 6 sequenceLength 5
	setcycle 7 sequenceLength 5
	setcycle 8 sequenceLength 6
	setcycle 9 sequenceLength 6
	setcycle 10 sequenceLength 7
	setcycle 11 sequenceLength 7
	setcycle 12 sequenceLength 8
	setcycle 13 sequenceLength 8
	setcycle 14 sequenceLength 9
	setcycle 15 sequenceLength 9
	setcycle 16 sequenceLength 10
	setcycle 17 sequenceLength 10
	run new_sequence

define inline_javascript urlQueryParameters
	set description "Executes Python code"
	set _run ""
	___prepare__
	vars.ID = jatos.urlQueryParameters.pid;
	__end__

define inline_javascript wrong_script
	set description "Executes Python code"
	___run__
	breakLoop = true;
	failedAttempts++;
	trialAttempts++;
	
	flashClickedRect(sequenceDictionary[response], 'red');
	__end__
	set _prepare ""

